opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: 3 columns
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 1}
  DMI: {definitionId: custom_beta/ericasstuff_1_reservoir_120000ul/1, slot: 2}
  Dan 24 Reservoir 4000 µL: {definitionId: custom_beta/dan_24_reservoir_4000ul/1, slot: 3}
  ColumnHolder 5 Well Plate 100000 µL: {definitionId: custom_beta/columnholder_5_wellplate_100000ul/1, slot: 10}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - DMI
  - Ahx
  - CL
  - Vivo
  - Deprotection
ingredLocations:
  DMI:
    DMI {volume: 100000}: A1
  Dan 24 Reservoir 4000 µL:
    Deprotection {volume: 4000}: A1, B1
    Ahx {volume: 1200}: A2
    CL {volume: 1200}: A3
    Vivo {volume: 1200}: A4
savedStepForms:
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: Ahx addition
  pipette: p1000_single_gen2
  volume: 350
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A2
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: Ahx Pause 3 hours
  pauseAction: untilTime
  pauseHour: 3
  pauseMessage: Ahx addition
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: deprotection1
  pipette: p1000_single_gen2
  volume: 400
  path: single
  changeTip: always
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: Deprotection pause 5 minutes
  pauseAction: untilTime
  pauseMinute: 5
- stepType: moveLiquid
  stepName: deprotection1
  pipette: p1000_single_gen2
  volume: 400
  path: single
  changeTip: always
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: Deprotection pause 5 minutes
  pauseAction: untilTime
  pauseMinute: 5
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 40
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: CL addition
  pipette: p1000_single_gen2
  volume: 350
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A3
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: CL Pause 3 hours
  pauseAction: untilTime
  pauseHour: 3
  pauseMessage: Ahx addition
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 30
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 30
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 30
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 30
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: deprotection2
  pipette: p1000_single_gen2
  volume: 400
  path: single
  changeTip: always
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: B1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: Deprotection pause 5 minutes
  pauseAction: untilTime
  pauseMinute: 5
- stepType: moveLiquid
  stepName: deprotection2
  pipette: p1000_single_gen2
  volume: 400
  path: single
  changeTip: always
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: B1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: Deprotection pause 5 minutes
  pauseAction: untilTime
  pauseMinute: 5
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 20
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 20
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 20
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 20
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
- stepType: pause
  stepName: wash pause 1 min
  pauseAction: untilTime
  pauseMinute: 1
- stepType: moveLiquid
  stepName: Vivo addition
  pipette: p1000_single_gen2
  volume: 350
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A4
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A3
  dispense_mmFromBottom: 40
labwareDefinitions:
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  custom_beta/ericasstuff_1_reservoir_120000ul/1:
    brand: {brand: Erica's Stuff, brandId: [Erica]}
    metadata: {displayName: Erica's Stuff 1 Reservoir 120000 µL, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.57, zDimension: 96}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: ericasstuff_1_reservoir_120000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 90, totalLiquidVolume: 120000, shape: circular, diameter: 28, x: 63, y: 42.82, z: 6}
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  custom_beta/dan_24_reservoir_4000ul/1:
    brand: {brand: Dan, brandId: [Dan2]}
    metadata: {displayName: Dan 24 Reservoir 4000 µL, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 46}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: dan_24_reservoir_4000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 44, totalLiquidVolume: 4000, shape: circular, diameter: 13, x: 14.9, y: 72.17, z: 2}
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  custom_beta/columnholder_5_wellplate_100000ul/1:
    brand: {brand: ColumnHolder, brandId: [DanYijia]}
    metadata: {displayName: ColumnHolder 5 Well Plate 100000 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 87}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: columnholder_5_wellplate_100000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 45, totalLiquidVolume: 100000, shape: circular, diameter: 9, x: 19.8, y: 42.74, z: 42}
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commands:
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2, volume: 1000, labware: DMI, well: A1, offsetFromBottomMm: 40, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 1000, labware: ColumnHolder 5 Well Plate 100000 µL, well: A1, offsetFromBottomMm: 40, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2, volume: 1000, labware: DMI, well: A1, offsetFromBottomMm: 40, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 1000, labware: ColumnHolder 5 Well Plate 100000 µL, well: A2, offsetFromBottomMm: 40, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2, volume: 1000, labware: DMI, well: A1, offsetFromBottomMm: 40, flowRate: 137.35}
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