opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: 4 K columns Ahx, CL, Vivo addition
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2 (left): {mount: left}
  p1000_single_gen2 (right): {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 1}
  DMI: {definitionId: custom_beta/danny_1_reservoir_350000ul/1, slot: 2}
  Dan 24 Reservoir 4000 µL: {definitionId: custom_beta/dan_24_reservoir_4000ul/1, slot: 3}
  ColumnHolder 5 Well Plate 100000 µL: {definitionId: custom_beta/columnholder_5_wellplate_100000ul/1, slot: 7}
pipetteTiprackAssignments:
  p1000_single_gen2 (left): opentrons/opentrons_96_tiprack_1000ul/1
  p1000_single_gen2 (right): opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - DMI
  - Deprotection
  - Ahx
  - CL
  - Vivo
ingredLocations:
  DMI:
    DMI {volume: 350000}: A1
  Dan 24 Reservoir 4000 µL:
    Deprotection {volume: 4000}: A1-C1
    Ahx {volume: 2000}: A2
    CL {volume: 2000}: A3
    Vivo {volume: 2000}: A4
savedStepForms:
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: Ahx addition
  pipette: p1000_single_gen2 (left)
  volume: 300
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A2
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  aspirate_mmFromBottom: 3
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: Ahx pause
  pauseAction: untilTime
  pauseHour: 3
  pauseMessage: Ahx pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: Ahx Deprotection 1
  pipette: p1000_single_gen2 (left)
  volume: 450
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: Ahx deprotection 1 pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Ahx deprotection 1 pause
- stepType: moveLiquid
  stepName: Ahx Deprotection 2
  pipette: p1000_single_gen2 (left)
  volume: 450
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: Ahx deprotection 1 pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Ahx deprotection 1 pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: CL addition
  pipette: p1000_single_gen2 (left)
  volume: 300
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A3
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  aspirate_mmFromBottom: 3
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: CL pause
  pauseAction: untilTime
  pauseHour: 3
  pauseMessage: CL pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: Ahx Deprotection 1
  pipette: p1000_single_gen2 (left)
  volume: 450
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: B1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: Ahx deprotection 1 pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Ahx deprotection 1 pause
- stepType: moveLiquid
  stepName: Ahx Deprotection 2
  pipette: p1000_single_gen2 (left)
  volume: 450
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: B1
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: Ahx deprotection 1 pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Ahx deprotection 1 pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: moveLiquid
  stepName: DMI wash
  pipette: p1000_single_gen2 (left)
  volume: 1000
  path: single
  changeTip: once
  aspirate_labware: DMI
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
- stepType: pause
  stepName: wash pause
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wash pause
- stepType: moveLiquid
  stepName: Vivo Addition
  pipette: p1000_single_gen2 (left)
  volume: 300
  path: single
  changeTip: once
  aspirate_labware: Dan 24 Reservoir 4000 µL
  aspirate_wells: A4
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  aspirate_mmFromBottom: 4
  dispense_labware: ColumnHolder 5 Well Plate 100000 µL
  dispense_wells: A1-A4
  dispense_mmFromBottom: 60
labwareDefinitions:
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  custom_beta/danny_1_reservoir_350000ul/1:
    brand: {brand: Danny, brandId: [Danny'sStuff]}
    metadata: {displayName: Danny 1 Reservoir 350000 µL, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.5, yDimension: 85.4, zDimension: 110}
    parameters: {format: irregular, quirks: [centerMultichannelOnWells, touchTipDisabled], isTiprack: false, isMagneticModuleCompatible: false, loadName: danny_1_reservoir_350000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 106, totalLiquidVolume: 350000, shape: circular, diameter: 80, x: 63.75, y: 42.7, z: 4}
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  custom_beta/dan_24_reservoir_4000ul/1:
    brand: {brand: Dan, brandId: [Dan2]}
    metadata: {displayName: Dan 24 Reservoir 4000 µL, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 46}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: dan_24_reservoir_4000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 44, totalLiquidVolume: 4000, shape: circular, diameter: 13, x: 14.9, y: 72.17, z: 2}
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  custom_beta/columnholder_5_wellplate_100000ul/1:
    brand: {brand: ColumnHolder, brandId: [DanYijia]}
    metadata: {displayName: ColumnHolder 5 Well Plate 100000 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 87}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: columnholder_5_wellplate_100000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 45, totalLiquidVolume: 100000, shape: circular, diameter: 9, x: 19.8, y: 42.74, z: 42}
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commands:
- pickUpTip: {pipette: p1000_single_gen2 (left), labware: Opentrons 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2 (left), volume: 1000, labware: DMI, well: A1, offsetFromBottomMm: 5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2 (left), volume: 1000, labware: ColumnHolder 5 Well Plate 100000 µL, well: A1, offsetFromBottomMm: 60, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2 (left), volume: 1000, labware: DMI, well: A1, offsetFromBottomMm: 5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2 (left), volume: 1000, labware: ColumnHolder 5 Well Plate 100000 µL, well: A2, offsetFromBottomMm: 60, flowRate: 137.35}
- aspirate: {pipette: p1000_single_gen2 (left), volume: 1000, labware: DMI, well: A1, offsetFromBottomMm: 5, flowRate: 137.35}
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